OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream 2=#0.Signal stream -> Identity "ch1" => #2
#2.Output stream 2 -> Reference Channel
  Channel = 16
  Channel Matching Method = Index
-> Channel Selector "1; 3; 6; 7; 11; 14"
  Channel List = 1; 3; 6; 7; 11; 14
  Action = Select
  Channel Matching Method = Index
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 16
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0078125
-> Simple DSP
  Equation = x*x
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Spatial Filter
  Spatial Filter Coefficients = 0.1667;0.1667;0.1667;0.1667;0.1667;0.1667
  Number of Output Channels = 1
  Number of Input Channels = 6
  Filter matrix file =
-> Signal average => #10
Data=#10 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#10 -> OSC Controller
  OSC Server IP = 192.168.1.8
  OSC Server Port = 9017
  OSC Address = /ch1
Input stream 2=#0.Signal stream -> Identity "ch2" => #13
#13.Output stream 2 -> Reference Channel
  Channel = 16
  Channel Matching Method = Index
-> Channel Selector "2; 5; 9; 10; 13; 15"
  Channel List = 2; 5; 9; 10; 13; 15
  Action = Select
  Channel Matching Method = Index
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 16
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0078125
-> Simple DSP
  Equation = x*x
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Spatial Filter
  Spatial Filter Coefficients = 0.1667;0.1667;0.1667;0.1667;0.1667;0.1667
  Number of Output Channels = 1
  Number of Input Channels = 6
  Filter matrix file =
-> Signal average => #21
Data=#21 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#21 -> OSC Controller
  OSC Server IP = 192.168.1.8
  OSC Server Port = 9017
  OSC Address = /ch2
Input stream 2=#0.Signal stream -> Identity "ch3" => #24
#24.Output stream 2 -> Reference Channel
  Channel = 16
  Channel Matching Method = Index
-> Channel Selector "1; 3; 6; 7; 11; 14"
  Channel List = 1; 3; 6; 7; 11; 14
  Action = Select
  Channel Matching Method = Index
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0078125
-> Simple DSP
  Equation = x*x
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Spatial Filter
  Spatial Filter Coefficients = 0.1667;0.1667;0.1667;0.1667;0.1667;0.1667
  Number of Output Channels = 1
  Number of Input Channels = 6
  Filter matrix file =
-> Signal average => #32
Data=#32 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#32 -> OSC Controller
  OSC Server IP = 192.168.1.8
  OSC Server Port = 9017
  OSC Address = /ch3
Input stream 2=#0.Signal stream -> Identity "ch4" => #35
#35.Output stream 2 -> Reference Channel
  Channel = 16
  Channel Matching Method = Index
-> Channel Selector "2; 5; 9; 10; 13; 15"
  Channel List = 2; 5; 9; 10; 13; 15
  Action = Select
  Channel Matching Method = Index
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0078125
-> Simple DSP
  Equation = x*x
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> 0xc67a01dc Spatial Filter
  Spatial Filter Coefficients = 0.1667;0.1667;0.1667;0.1667;0.1667;0.1667
  Number of Output Channels = 1
  Number of Input Channels = 6
  Filter matrix file =
-> Signal average => #43
Data=#43 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#43 -> OSC Controller
  OSC Server IP = 192.168.1.8
  OSC Server Port = 9017
  OSC Address = /ch4
