OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 48
  High cut frequency (Hz) = 52
  Pass band ripple (dB) = 0.5
Input stream 2=#1 -> Identity "theta" => #2
#2.Output stream 2 -> Reference Channel => #3
  Channel = 16
  Channel Matching Method = Index
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 32
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 4
  Epoch 1 intervals (in sec) = 0.2
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #8
  Averaging type = Moving epoch average
  Epoch count = 6
-> Channel Selector "8" => #9
  Channel List = 8
  Action = Select
  Channel Matching Method = Index
#8 -> Channel Selector "12" => #10
  Channel List = 12
  Action = Select
  Channel Matching Method = Index
Input - A=#9, Input - B=#10 -> Simple DSP => #11
  Equation = (a+b)/2
#3 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 8
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 4
  Epoch 1 intervals (in sec) = 0.2
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #16
  Averaging type = Moving epoch average
  Epoch count = 6
-> Channel Selector "8" => #17
  Channel List = 8
  Action = Select
  Channel Matching Method = Index
#16 -> Channel Selector "12" => #18
  Channel List = 12
  Action = Select
  Channel Matching Method = Index
Input - A=#17, Input - B=#18 -> Simple DSP => #19
  Equation = (a+b)/2
Input - A=#19, Input - B=#11 -> Simple DSP => #20
  Equation = a/b
Data=#20 -> Signal display "relative_theta"
  Display Mode = Scroll
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 1
  Vertical Offset = 0
  Time Scale = 20
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#20 -> OSC Controller
  OSC Server IP = 192.168.1.131
  OSC Server Port = 9001
  OSC Address = /relative_theta
Data=#0.Signal stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
